OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 59
  High cut frequency (Hz) = 61
  Pass band ripple (dB) = 1
-> 0xc67a01dc Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 2
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 50
  Pass band ripple (dB) = 1
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis (FFT) => #4
  Spectral components = Amplitude
#4.Amplitude -> Power spectrum display
  Minimum frequency to display = 4
  Maximum frequency to display = 50
Data=#2, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#0.Signal stream, Input stimulations=#0.Stimulations -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
